<PlusConfiguration version="2.3" PlusRevision="Plus-2.0.0.2801">

  <CoordinateDefinitions>
    <!--<Transform From="Image" To="Probe"
      Matrix="
        0.000796231	0.0854272	0.000850194	12.74
        -0.0853999	0.000772721	0.00233653	50.76
        0.00232863	-0.000871617	0.0853992	-0.5
        0	0	0	1"
       Error="0.582721" Date="2012.02.06 17:57:00"/>-->
	   
	  <!--<Transform From="Image" To="TransducerOriginPixel"
      Matrix="
        1 0 0 -505
        0 1 0 0
        0 0 1 0
        0 0 0 1"
      Date="2011.12.06 17:57:00" />-->
	   
	   <Transform From="Image" To="Probe"
      Matrix="
        0.997	0.0	0.076   -24
        0.00	1	0.0     0
        -0.076	0.0	0.997  -7
        0     0       0     1"
      Error="0.01" Date="012712_152030" />
 
	 <!--  <Transform From="Image" To="Probe"
      Matrix="
        0.000796231	0.0854272	0.000850194	+50
        -0.0853999	0.000772721	0.00233653	0
        0.00232863	-0.000871617	0.0853992	0
        0	0	0	1"
       Error="0" Date="2019.08.28 17:57:00"/>-->
	   
	   <!-- <Transform From="Image" To="Probe"
      Matrix="
        0	0	1	12.74
        0	1	0	50.76
       -1	0	0	-0.5
        0	0	0	1"
       Error="0.582721" Date="2012.02.06 17:57:00"/>-->
  </CoordinateDefinitions>
  
    <VolumeReconstruction
    OutputSpacing="0.415 0.415 0.833"
	ClipRectangleOrigin=" "
    ClipRectangleSize=" "
	OutputOrigin="0 0 0" 
    Interpolation="LINEAR"
    Optimization="FULL"
    Compounding="On"
	CompoundingMode="MEAN"
    FillHoles="On"
	NumberOfThreads ="6">
	<HoleFilling>
          <HoleFillingElement
            Type="STICK"
            StickLengthLimit="9"
            NumberOfSticksToUse="1" />
    </HoleFilling>
      </VolumeReconstruction>
  

</PlusConfiguration>

<!--ClipRectangleOrigin="900 600"
    ClipRectangleSize="1000 1200"-->
	
	
